CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "LIG1") (file does contain "U2OS")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:PLA_Image
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:PLA_Image
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:Red: 1
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    Image name:DAPI
    Channel number:Green: 2
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    Image name:PLA

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):120,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
EnhanceOrSuppressFeatures:[module_num:7|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:PLA
    Name the output image:EnhancedRed
    Select the operation:Suppress
    Feature size:5
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
MaskImage:[module_num:8|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:DAPI
    Name the output image:MaskedBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:EnhancedRed
    Name the primary objects to be identified:PLA
    Typical diameter of objects, in pixel units (Min,Max):4,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.01
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
MeasureObjectIntensity:[module_num:10|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:11|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notes:['Measure the intensity of the foci against the POLD1 image.']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
    Hidden:1
    Select an image to measure:PLA
    Select objects to measure:PLA

RelateObjects:[module_num:12|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notes:['Establish a parent-child between the foci (“children”) and the nuclei (“parents”) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:PLA
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ExportToSpreadsheet:[module_num:13|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Users/weiyanjia/Desktop/PLA/analysis/results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:POLE1_Clone110_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:PLA
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
